CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:59
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['v1 - basic version median filter', 'v2 - background subtract', 'v3 - background subtract with using Tph2 to generate seeds\x85. need to fix holes in cells issue. Closure? add DAPI? Didn\x92t work', 'v4 - gather all nuclei, measure around them and use that to filter for those that are Tph2+, then add this binary to the Tph2 binary to get whole cell']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Mouse>.*)_slide(?P<Slide>.*)_section(?P<Section>[0-9])_(?P<Region>.*)_C(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "C1.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "C2.tif")
    Name to assign these images:Tph2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:Tph2
    Name the output image:GaussianFilterTph2
    Sigma:100

RescaleIntensity:[module_num:6|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
    Select the input image:Tph2
    Name the output image:rescaleTph2
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tph2_BGsubtract
    Image or measurement?:Image
    Select the first image:rescaleTph2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterTph2
    Multiply the second image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:8|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
    Select the input image:Tph2_BGsubtract
    Name the output image:EnhanceNeurites
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:No

CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:Tph2
    Name the output image:IllumTph2
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:Tph2
    Name the output image:CorrTph2
    Select the illumination function:IllumTph2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageIntensity:[module_num:11|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
    Select images to measure:CorrTph2, Tph2, Tph2_BGsubtract
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:12|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CellSomaOnly
    Image or measurement?:Image
    Select the first image:Tph2_BGsubtract
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceNeurites
    Multiply the second image by:1.5
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
Threshold:[module_num:13|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:5
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,0.03
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    Select the measurement to threshold with:Intensity_LowerQuartileIntensity_Tph2_BGsubtract
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
RemoveHoles:[module_num:14|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
    Select the input image:Threshold
    Name the output image:SectionMask
    Size of holes to fill:100

MaskImage:[module_num:15|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
    Select the input image:CorrTph2
    Name the output image:Tph2CorrBGSubMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:SectionMask
    Invert the mask?:No

MaskImage:[module_num:16|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Tph2BGSubMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:SectionMask
    Invert the mask?:No

Threshold:[module_num:17|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
    Select the input image:Tph2CorrBGSubMasked
    Name the output image:Tph2Neurons
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2.9
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:500
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    Thresholding method:Otsu

MeasureImageIntensity:[module_num:18|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
    Select images to measure:Tph2BGSubMasked
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
RunCellpose:[module_num:19|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
    Select the input image:Tph2_BGsubtract
    Expected object diameter:21
    Detection mode:custom
    Name the output object:RunCellpose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:DNA
    Save probability image?:No
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    Location of the pre-trained model file:Default Input Folder sub-folder|Desktop
    Pre-trained model file name:CP_tph2_nuc_405
    Flow threshold:0.0
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

RunCellpose:[module_num:20|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
    Select the input image:DNA
    Expected object diameter:12
    Detection mode:nuclei
    Name the output object:Nuclei_pose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Z rescaling factor (anisotropy):1.0
    Use Omnipose for mask reconstruction:No
    Invert images:No

MeasureObjectIntensity:[module_num:21|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
    Select images to measure:Tph2, Tph2Neurons, Tph2_BGsubtract
    Select objects to measure:RunCellpose

MeasureObjectSizeShape:[module_num:22|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
    Select object sets to measure:RunCellpose
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:23|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
    Select the objects to filter:RunCellpose
    Name the output objects:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Tph2Neurons
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:24|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
    Parent objects:Cells
    Child objects:Nuclei_pose
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:25|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
    Select the objects to filter:Nuclei_pose
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Minimal per object
    Select the objects that contain the filtered objects:Cells
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Parent with most overlap
    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Distance_Centroid_Cells
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
RelateObjects:[module_num:26|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
    Parent objects:Cells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:27|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
    Select the objects to filter:Cells
    Name the output objects:Cells_with_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Nuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
EnhanceOrSuppressFeatures:[module_num:28|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enabled:False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
    Select the input image:Tph2_BGsubtract
    Name the output image:EnhanceCellbodies
    Select the operation:Suppress
    Feature size:8
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
IdentifySecondaryObjects:[module_num:29|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
    Select the input objects:Cells
    Name the objects to be identified:CellsFilledOut
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:Tph2_BGsubtract
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.3
    Lower and upper bounds on threshold:0.15,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifySecondaryObjects:[module_num:30|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
    Select the input objects:CellsFilledOut
    Name the objects to be identified:CellsWithProcesses
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:EnhanceNeurites
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
ExpandOrShrinkObjects:[module_num:31|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
    Select the input objects:CellsWithProcesses
    Name the output objects:BorderedCellsWithProcesses
    Select the operation:Add partial dividing lines between objects
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
ExpandOrShrinkObjects:[module_num:32|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
    Select the input objects:Cells
    Name the output objects:BorderedCells
    Select the operation:Add partial dividing lines between objects
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
RescaleIntensity:[module_num:33|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
    Select the input image:Tph2_BGsubtract
    Name the output image:RescaleTph2BGsubtract
    Rescaling method:Stretch each image to use the full intensity range
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
ConvertObjectsToImage:[module_num:34|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
    Select the input objects:BorderedCellsWithProcesses
    Name the output image:CellsWithProcesses_binary
    Select the color format:Binary (black & white)
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
MorphologicalSkeleton:[module_num:35|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
    Select the input image:CellsWithProcesses_binary
    Name the output image:MorphologicalSkeleton

MeasureObjectSkeleton:[module_num:36|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notes:['potentially seeds can be smoothcellbodies if not, then ErodedCells']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
    Select the seed objects:BorderedCells
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:15
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectIntensity:[module_num:37|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
    Select images to measure:DNA, Tph2
    Select objects to measure:Cells, CellsWithProcesses, Cells_with_nuclei, Nuclei

MeasureObjectSizeShape:[module_num:38|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
    Select object sets to measure:Cells, CellsWithProcesses, Cells_with_nuclei, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectNeighbors:[module_num:39|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:20
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:40|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
    Parent objects:Cells_with_nuclei
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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    Parent name:None

RelateObjects:[module_num:41|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
    Parent objects:Cells
    Child objects:BorderedCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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    Parent name:None

RescaleIntensity:[module_num:42|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Tph2_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:43|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Tph2_scaled_brighter
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,0.4
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
OverlayOutlines:[module_num:44|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_scaled
    Name the output image:_outlines_final
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Cells
    Select outline color:yellow
    Select objects to display:Nuclei

OverlayOutlines:[module_num:45|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_scaled_brighter
    Name the output image:_outlines_cellsWithProcesses
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:magenta
    Select objects to display:CellsWithProcesses
    Select outline color:yellow
    Select objects to display:Nuclei

OverlayOutlines:[module_num:46|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BranchpointImage
    Name the output image:_outlines_branchpoints
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:magenta
    Select objects to display:CellsWithProcesses
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:cyan
    Select objects to display:BorderedCells

OverlayOutlines:[module_num:47|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_scaled
    Name the output image:_outlines_cellswithNuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cells
    Select outline color:#FF0080
    Select objects to display:Cells_with_nuclei
    Select outline color:yellow
    Select objects to display:Nuclei

ConvertObjectsToImage:[module_num:48|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
    Select the input objects:Cells_with_nuclei
    Name the output image:Cells_with_nuclei_labelmap
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:49|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
    Select the input objects:Cells
    Name the output image:Cells_labelmap
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:50|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
    Select the input objects:Nuclei
    Name the output image:Nuclei_labelmap
    Select the color format:uint16
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
SaveImages:[module_num:51|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
    Select the type of image to save:Image
    Select the image to save:Cells_with_nuclei_labelmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tph2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cells_with_nuclei_masks
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Labels_cells_with_nuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:52|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
    Select the type of image to save:Image
    Select the image to save:Cells_labelmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tph2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_masks
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Labels_cells
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:53|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_labelmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_labels_nuclei_masks
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Labels_nuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:54|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
    Select the type of image to save:Image
    Select the image to save:_outlines_cellswithNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:Tph2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_cellswithNuclei
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Outlines_cells_with_nuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:55|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
    Select the type of image to save:Image
    Select the image to save:_outlines_final
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_cells
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Outlines_cells
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:56|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
    Select the type of image to save:Image
    Select the image to save:_outlines_cellsWithProcesses
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_cellsWithProcesses
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Outlines_CellsWithProcesses
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:57|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
    Select the type of image to save:Image
    Select the image to save:_outlines_branchpoints
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_branchpoints
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Outlines_CellsWithProcesses
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:58|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:Tph2_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:Yes
    Calculate the per-image standard deviation values of object measurements?:Yes
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    Export measurements for all objects to the database?:Select...
    Select the objects:BorderedCells,BorderedCellsWithProcesses,Cells,Cells_with_nuclei,Nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:Tph2Neurons
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:59|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Tph2_
    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells_with_nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
