CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['v1 - basic version median filter', 'v2 - background subtract', 'v3 - background subtract with using Tph2 to generate seeds…. need to fix holes in cells issue. Closure? add DAPI? Didn’t work', 'v4 - gather all nuclei, measure around them and use that to filter for those that are Tph2+, then add this binary to the Tph2 binary to get whole cell']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Tph2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
GaussianFilter:[module_num:5|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
    Select the input image:Tph2
    Name the output image:GaussianFilterTph2
    Sigma:100

ImageMath:[module_num:6|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:BGSubtract_Tph2
    Image or measurement?:Image
    Select the first image:Tph2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterTph2
    Multiply the second image by:1.0
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
Threshold:[module_num:7|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
    Select the input image:BGSubtract_Tph2
    Name the output image:Threshold_BGsub_Tph2
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
DilateImage:[module_num:8|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
    Select the input image:Threshold_BGsub_Tph2
    Name the output image:DilatedTph2
    Structuring element:disk,2

Closing:[module_num:9|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enabled:False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
    Select the input image:DilatedTph2
    Name the output image:Closing_Tph2
    Structuring element:disk,3

RemoveHoles:[module_num:10|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
    Select the input image:DilatedTph2
    Name the output image:RemoveHoles_Tph2_Bgsub
    Size of holes to fill:30

ErodeImage:[module_num:11|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
    Select the input image:RemoveHoles_Tph2_Bgsub
    Name the output image:Eroded_Tph2
    Structuring element:disk,2

MedianFilter:[module_num:12|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enabled:False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
    Select the input image:Tph2
    Name the output image:MedianFilteredTph2
    Window:3

MedianFilter:[module_num:13|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
    Select the input image:DNA
    Name the output image:MedianFilteredDNA
    Window:2

Threshold:[module_num:14|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notes:['V1']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enabled:False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
    Select the input image:MedianFilteredTph2
    Name the output image:ThresholdTph2
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
RemoveHoles:[module_num:15|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enabled:False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
    Select the input image:ThresholdTph2
    Name the output image:RemoveHolesTph2
    Size of holes to fill:30

Threshold:[module_num:16|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
    Select the input image:MedianFilteredDNA
    Name the output image:ThresholdDAPI
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
Watershed:[module_num:17|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
    Select the input image:ThresholdDAPI
    Name the output object:WatershedDAPI
    Use advanced settings?:Yes
    Generate from:Markers
    Markers:Eroded_Tph2
    Mask:ThresholdDAPI
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ExpandOrShrinkObjects:[module_num:18|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
    Select the input objects:WatershedDAPI
    Name the output objects:Dilated_Nuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
ConvertObjectsToImage:[module_num:19|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
    Select the input objects:Dilated_Nuclei
    Name the output image:Dilated_nuc_for_subtract
    Select the color format:Binary (black & white)
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
OverlayOutlines:[module_num:20|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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BGSubtract_Tph2
    Name the output image:Nuclei_seeded_withTph2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:WatershedDAPI

ErodeObjects:[module_num:21|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enabled:False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
    Select the input object:WatershedDAPI
    Name the output object:ErodeObjects
    Structuring element:Disk,1
    Prevent object removal:Yes
    Relabel resulting objects:Yes

ConvertObjectsToImage:[module_num:22|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enabled:False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
    Select the input objects:WatershedDAPI
    Name the output image:DAPI_seeds
    Select the color format:Binary (black & white)
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
MeasureObjectIntensity:[module_num:23|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
    Select images to measure:BGSubtract_Tph2
    Select objects to measure:Dilated_Nuclei

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:Dilated_Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

Watershed:[module_num:25|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notes:['BASIC OLD']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enabled:False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
    Select the input image:RemoveHolesTph2
    Name the output object:WatershedTph2
    Use advanced settings?:No
    Generate from:Distance
    Markers:DAPI_seeds_eroded
    Mask:RemoveHolesTph2
    Connectivity:1
    Compactness:0.0
    Footprint:8
    Downsample:2
    Separate watershed labels:No
    Declump method:Intensity
    Reference Image:MedianFilteredTph2
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Square,2

Watershed:[module_num:26|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notes:['BG subtract', '']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
    Select the input image:Eroded_Tph2
    Name the output object:Watershed_Tph2_BG_Subtract
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:20
    Downsample:2
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ImageMath:[module_num:27|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enabled:False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
    Operation:And
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Threshold_BGsub_Tph2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Dilated_nuc_for_subtract
    Multiply the second image by:1.0
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
ConvertObjectsToImage:[module_num:28|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
    Select the input objects:Watershed_Tph2_BG_Subtract
    Name the output image:Tph2_seeds
    Select the color format:Binary (black & white)
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
OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:BGSubtract_Tph2
    Name the output image:Dilation_erosion_overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#E6ED00
    Select objects to display:Watershed_Tph2_BG_Subtract

Watershed:[module_num:30|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enabled:False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
    Select the input image:DAPI_seeds
    Name the output object:Watershed_DAPI_Tph2_seds
    Use advanced settings?:No
    Generate from:Markers
    Markers:Tph2_seeds
    Mask:DAPI_seeds
    Connectivity:1
    Compactness:.5
    Footprint:8
    Downsample:1
    Separate watershed labels:Yes
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ExportToDatabase:[module_num:31|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:Tph2_nuclei_classifier
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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