CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:61
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['v1 - basic version median filter', 'v2 - background subtract', 'v3 - background subtract with using Tph2 to generate seeds…. need to fix holes in cells issue. Closure? add DAPI? Didn’t work', 'v4 - gather all nuclei, measure around them and use that to filter for those that are Tph2+, then add this binary to the Tph2 binary to get whole cell']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Mouse>.*)_slide(?P<Slide>.*)_section(?P<Section>[0-9])_(?P<Region>.*)_C(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "C1.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "C2.tif")
    Name to assign these images:Tph2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:rescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:6|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
    Select the input image:Tph2
    Name the output image:GaussianFilterTph2
    Sigma:100

RescaleIntensity:[module_num:7|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
    Select the input image:Tph2
    Name the output image:rescaleTph2
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tph2_BGsubtract
    Image or measurement?:Image
    Select the first image:rescaleTph2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterTph2
    Multiply the second image by:1.0
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
MeasureImageIntensity:[module_num:9|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
    Select images to measure:Tph2, Tph2_BGsubtract
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:Tph2_BGsubtract
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:No

ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CellSomaOnly
    Image or measurement?:Image
    Select the first image:Tph2_BGsubtract
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceOrSuppressFeatures
    Multiply the second image by:1.5
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
Threshold:[module_num:12|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:5
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,0.03
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    Select the measurement to threshold with:Intensity_LowerQuartileIntensity_Tph2_BGsubtract
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
RemoveHoles:[module_num:13|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
    Select the input image:Threshold
    Name the output image:SectionMask
    Size of holes to fill:100

MaskImage:[module_num:14|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Tph2BGSubMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:SectionMask
    Invert the mask?:No

MeasureImageIntensity:[module_num:15|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
    Select images to measure:Tph2BGSubMasked
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
Watershed:[module_num:16|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enabled:False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
    Select the input image:RemoveHoles
    Name the output object:Watershed
    Use advanced settings?:No
    Generate from:Distance
    Markers:None
    Mask:Leave blank
    Connectivity:1
    Compactness:0.0
    Footprint:100
    Downsample:1
    Separate watershed labels:No
    Declump method:Shape
    Reference Image:None
    Segmentation distance transform smoothing factor:1.0
    Minimum distance between seeds:1
    Minimum absolute internal distance:0.0
    Pixels from border to exclude:0
    Maximum number of seeds:-1
    Structuring element for seed dilation:Disk,1

ErodeImage:[module_num:17|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enabled:False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
    Select the input image:RemoveHoles
    Name the output image:SectionMask
    Structuring element:square,10

Crop:[module_num:18|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enabled:False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
    Select the input image:Tph2
    Name the output image:Tph2Crop
    Select the cropping shape:Image
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    Remove empty rows and columns?:All
    Select the masking image:SectionMask
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
Crop:[module_num:19|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enabled:False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
    Select the input image:Tph2_BGsubtract
    Name the output image:Tph2CropBGSub
    Select the cropping shape:Image
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    Remove empty rows and columns?:All
    Select the masking image:SectionMask
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
Crop:[module_num:20|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enabled:False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
    Select the input image:DNA
    Name the output image:DNACrop
    Select the cropping shape:Image
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    Remove empty rows and columns?:All
    Select the masking image:SectionMask
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
RunCellpose:[module_num:21|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
    Select the input image:Tph2_BGsubtract
    Expected object diameter:25
    Detection mode:Cells
    Name the output object:CellPoseTph2
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3

RunCellpose:[module_num:22|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enabled:False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
    Select the input image:Tph2_BGsubtract
    Expected object diameter:25
    Detection mode:Cells
    Name the output object:CellPoseTph2
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:rescaleDNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:.5
    Cell probability threshold:0.00
    GPU memory share for each worker:0.3

RunCellpose:[module_num:23|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
    Select the input image:DNA
    Expected object diameter:12
    Detection mode:Nuclei
    Name the output object:Nuclei_pose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3

RunCellpose:[module_num:24|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enabled:False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
    Select the input image:Tph2_BGsubtract
    Expected object diameter:15
    Detection mode:Cells
    Name the output object:RunCellpose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3

RunCellpose:[module_num:25|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
    Select the input image:Tph2_BGsubtract
    Expected object diameter:20
    Detection mode:Cells
    Name the output object:RunCellposeDNAseeds
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:DNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3

MeasureObjectIntensity:[module_num:26|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
    Select images to measure:Tph2, Tph2_BGsubtract
    Select objects to measure:CellPoseTph2, RunCellposeDNAseeds

FilterObjects:[module_num:27|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
    Select the objects to filter:RunCellposeDNAseeds
    Name the output objects:FilteredTph2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:28|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
    Select the objects to filter:CellPoseTph2
    Name the output objects:FilteredCellposeTph2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:0.12
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:29|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
    Select initial object set:FilteredCellposeTph2
    Select object set to combine:FilteredTph2
    Select how to handle overlapping objects:Preserve
    Name the combined object set:All_cellpose

MeasureObjectSizeShape:[module_num:30|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
    Select object sets to measure:All_cellpose
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:31|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
    Select the objects to filter:All_cellpose
    Name the output objects:FinalCellPose
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:32|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enabled:False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
    Select images to measure:Tph2_BGsubtract
    Select objects to measure:CellPoseTph2

MeasureObjectSizeShape:[module_num:33|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enabled:False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
    Select object sets to measure:CellPoseTph2
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:34|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enabled:False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
    Select the objects to filter:All_cellpose
    Name the output objects:FilteredCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:.05
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:0.05
    Filter using a maximum measurement value?:No
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
EnhanceOrSuppressFeatures:[module_num:35|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enabled:False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
    Select the input image:Tph2Crop
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:4
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
ImageMath:[module_num:36|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tph2BGSubtractMath
    Image or measurement?:Image
    Select the first image:Tph2BGSubMasked
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:0.5
    Measurement:Intensity_LowerQuartileIntensity_Tph2BGSubMasked

IdentifyPrimaryObjects:[module_num:37|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
    Select the input image:Tph2BGSubtractMath
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):15,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.9
    Lower and upper bounds on threshold:0.06,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:38|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:39|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
    Select images to measure:Tph2_BGsubtract
    Select objects to measure:IdentifyPrimaryObjects

FilterObjects:[module_num:40|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilteredIdentifyPrimary
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:Yes
    Maximum value:4000
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MedianRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:2.5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:41|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
    Select initial object set:FinalCellPose
    Select object set to combine:FilteredIdentifyPrimary
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CombinedObjects

MeasureObjectIntensity:[module_num:42|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
    Select images to measure:Tph2, Tph2_BGsubtract
    Select objects to measure:CombinedObjects

MeasureObjectSizeShape:[module_num:43|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
    Select object sets to measure:CombinedObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:44|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
    Select the objects to filter:CombinedObjects
    Name the output objects:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:4
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:.08
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:4000
    Select the measurement to filter by:AreaShape_MeanRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:2.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MedianIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:0.1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:45|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
    Select objects to be masked:Nuclei_pose
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:46|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
    Parent objects:Cells
    Child objects:MaskedNuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:47|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
    Select the objects to filter:MaskedNuclei
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cells
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Parent with most overlap
    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Parent_Cells
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
RelateObjects:[module_num:48|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
    Parent objects:Cells
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectIntensity:[module_num:49|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
    Select images to measure:DNA, Tph2
    Select objects to measure:Cells, Nuclei

MeasureObjectSizeShape:[module_num:50|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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:51|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
    Select the objects to filter:Cells
    Name the output objects:Cells_with_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Nuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:Yes
    Maximum value:1.5

RescaleIntensity:[module_num:52|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Tph2_crop_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:53|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_crop_scaled
    Name the output image:_outlines_final
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Cells
    Select outline color:yellow
    Select objects to display:Nuclei

OverlayOutlines:[module_num:54|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_crop_scaled
    Name the output image:_outlines_cellswithNuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cells
    Select outline color:#FF0080
    Select objects to display:Cells_with_nuclei
    Select outline color:yellow
    Select objects to display:Nuclei

OverlayOutlines:[module_num:55|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_crop_scaled
    Name the output image:_outlines_IDprimary
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:IdentifyPrimaryObjects
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:white
    Select objects to display:Cells
    Select outline color:#FF0080
    Select objects to display:FilteredIdentifyPrimary

OverlayOutlines:[module_num:56|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_crop_scaled
    Name the output image:_outlines_CellPose
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#80FF80
    Select objects to display:FilteredCellposeTph2
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:cyan
    Select objects to display:FilteredTph2
    Select outline color:#FF0080
    Select objects to display:FinalCellPose

SaveImages:[module_num:57|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
    Select the type of image to save:Image
    Select the image to save:_outlines_cellswithNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_cellswithNuclei
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_4\\CellsWithNuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:58|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
    Select the type of image to save:Image
    Select the image to save:_outlines_CellPose
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_cellpose
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_4\\Cellpose
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:59|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
    Select the type of image to save:Image
    Select the image to save:_outlines_IDprimary
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_IDPrimary
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_4\\IDPrimary
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:60|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
    Select the type of image to save:Image
    Select the image to save:_outlines_final
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_4\\FinalCells
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:61|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cells|Number_Object_Number,Cells|Intensity_StdIntensity_DNA,Cells|Intensity_StdIntensity_Tph2,Cells|Intensity_MeanIntensity_Tph2,Cells|Intensity_MeanIntensity_DNA,Cells|Intensity_UpperQuartileIntensity_DNA,Cells|Intensity_UpperQuartileIntensity_Tph2,Cells|Intensity_MinIntensityEdge_DNA,Cells|Intensity_MinIntensityEdge_Tph2,Cells|Intensity_MinIntensity_Tph2,Cells|Intensity_MinIntensity_DNA,Cells|Intensity_MassDisplacement_DNA,Cells|Intensity_MassDisplacement_Tph2,Cells|Intensity_LowerQuartileIntensity_DNA,Cells|Intensity_LowerQuartileIntensity_Tph2,Cells|Intensity_IntegratedIntensityEdge_DNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellPose_
    Overwrite existing files without warning?:Yes
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