CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:71
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['v1 - basic version median filter', 'v2 - background subtract', 'v3 - background subtract with using Tph2 to generate seeds…. need to fix holes in cells issue. Closure? add DAPI? Didn’t work', 'v4 - gather all nuclei, measure around them and use that to filter for those that are Tph2+, then add this binary to the Tph2 binary to get whole cell']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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Mouse>.*)_slide(?P<Slide>.*)_section(?P<Section>[0-9])_(?P<Region>.*)_C(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does endwith "C1.tif")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith "C2.tif")
    Name to assign these images:Tph2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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enabled:False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
    Select the input image:DNA
    Name the output image:rescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:6|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
    Select the input image:Tph2
    Name the output image:GaussianFilterTph2
    Sigma:100

RescaleIntensity:[module_num:7|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
    Select the input image:Tph2
    Name the output image:rescaleTph2
    Rescaling method:Stretch each image to use the full intensity range
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tph2_BGsubtract
    Image or measurement?:Image
    Select the first image:rescaleTph2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterTph2
    Multiply the second image by:1.0
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:Tph2_BGsubtract
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:5
    Feature type:Neurites
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    Smoothing scale:2
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    Enhancement method:Tubeness
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    Rescale result image:No

CorrectIlluminationCalculate:[module_num:10|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
    Select the input image:Tph2
    Name the output image:IllumTph2
    Select how the illumination function is calculated:Background
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    Block size:30
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:60
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:11|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
    Select the input image:Tph2
    Name the output image:CorrTph2
    Select the illumination function:IllumTph2
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageIntensity:[module_num:12|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
    Select images to measure:CorrTph2, Tph2, Tph2_BGsubtract
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:CellSomaOnly
    Image or measurement?:Image
    Select the first image:Tph2_BGsubtract
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:EnhanceOrSuppressFeatures
    Multiply the second image by:1.5
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
Threshold:[module_num:14|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:5
    Threshold correction factor:.5
    Lower and upper bounds on threshold:0.0,0.03
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    Select the measurement to threshold with:Intensity_LowerQuartileIntensity_Tph2_BGsubtract
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
RemoveHoles:[module_num:15|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
    Select the input image:Threshold
    Name the output image:SectionMask
    Size of holes to fill:100

MaskImage:[module_num:16|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
    Select the input image:CorrTph2
    Name the output image:Tph2CorrBGSubMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:SectionMask
    Invert the mask?:No

MaskImage:[module_num:17|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Tph2BGSubMasked
    Use objects or an image as a mask?:Image
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    Select image for mask:SectionMask
    Invert the mask?:No

Threshold:[module_num:18|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
    Select the input image:Tph2CorrBGSubMasked
    Name the output image:Tph2Neurons
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2.9
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:500
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    Thresholding method:Otsu

MeasureImageIntensity:[module_num:19|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
    Select images to measure:Tph2BGSubMasked
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
RunCellpose:[module_num:20|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
    Select the input image:Tph2_BGsubtract
    Expected object diameter:25
    Detection mode:Cells
    Name the output object:CellPoseTph2
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3

RunCellpose:[module_num:21|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
    Select the input image:DNA
    Expected object diameter:12
    Detection mode:Nuclei
    Name the output object:Nuclei_pose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3

RunCellpose:[module_num:22|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
    Select the input image:Tph2_BGsubtract
    Expected object diameter:20
    Detection mode:Cells
    Name the output object:RunCellposeDNAseeds
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:Yes
    Select the nuclei image:DNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0
    Flow threshold:0.4
    Cell probability threshold:0.0
    GPU memory share for each worker:0.3

MaskObjects:[module_num:23|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
    Select objects to be masked:RunCellposeDNAseeds
    Name the masked objects:MaskedCellPoseSeeds
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei_pose
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MaskObjects:[module_num:24|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
    Select objects to be masked:CellPoseTph2
    Name the masked objects:MaskedCellPose
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei_pose
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:25|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
    Select images to measure:Tph2, Tph2Neurons, Tph2_BGsubtract
    Select objects to measure:CellPoseTph2, MaskedCellPose, MaskedCellPoseSeeds, RunCellposeDNAseeds

FilterObjects:[module_num:26|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
    Select the objects to filter:MaskedCellPoseSeeds
    Name the output objects:FilteredCPcytoplasmsfromDNAseeds
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Tph2Neurons
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:RunCellposeDNAseeds
    Name the relabeled objects:FilteredTph2Cells_CP2

FilterObjects:[module_num:27|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
    Select the objects to filter:MaskedCellPose
    Name the output objects:FilteredCPCytoplasms
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_Tph2Neurons
    Filter using a minimum measurement value?:Yes
    Minimum value:.6
    Filter using a maximum measurement value?:No
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    Select additional object to relabel:CellPoseTph2
    Name the relabeled objects:FilteredTph2Cells_CP1

FilterObjects:[module_num:28|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enabled:False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
    Select the objects to filter:RunCellposeDNAseeds
    Name the output objects:FilteredTph2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:29|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enabled:False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
    Select the objects to filter:CellPoseTph2
    Name the output objects:FilteredCellposeTph2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:0.12
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:30|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enabled:False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
    Select initial object set:FilteredCellposeTph2
    Select object set to combine:FilteredTph2
    Select how to handle overlapping objects:Preserve
    Name the combined object set:All_cellpose

CombineObjects:[module_num:31|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
    Select initial object set:FilteredTph2Cells_CP2
    Select object set to combine:FilteredTph2Cells_CP1
    Select how to handle overlapping objects:Preserve
    Name the combined object set:Combined_cellpose

MeasureObjectSizeShape:[module_num:32|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
    Select object sets to measure:Combined_cellpose
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:33|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
    Select the objects to filter:Combined_cellpose
    Name the output objects:FinalCellPose
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:No
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
MeasureObjectIntensity:[module_num:34|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enabled:False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
    Select images to measure:Tph2_BGsubtract
    Select objects to measure:CellPoseTph2

MeasureObjectSizeShape:[module_num:35|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enabled:False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
    Select object sets to measure:CellPoseTph2
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

EnhanceOrSuppressFeatures:[module_num:36|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enabled:False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
    Select the input image:Tph2Crop
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Suppress
    Feature size:4
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
ImageMath:[module_num:37|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tph2BGSubtractMath
    Image or measurement?:Image
    Select the first image:Tph2BGSubMasked
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:0.5
    Measurement:Intensity_LowerQuartileIntensity_Tph2BGSubMasked

IdentifyPrimaryObjects:[module_num:38|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
    Select the input image:Tph2BGSubtractMath
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):15,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Suppress local maxima that are closer than this minimum allowed distance:15
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:2
    Threshold correction factor:1.9
    Lower and upper bounds on threshold:0.06,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:39|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
    Select object sets to measure:IdentifyPrimaryObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:40|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
    Select images to measure:Tph2Neurons, Tph2_BGsubtract
    Select objects to measure:IdentifyPrimaryObjects

FilterObjects:[module_num:41|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enabled:False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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilteredIdentifyPrimary
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:Yes
    Maximum value:4000
    Select the measurement to filter by:Intensity_UpperQuartileIntensity_Tph2_BGsubtract
    Filter using a minimum measurement value?:Yes
    Minimum value:0.15
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MedianRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:2.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:42|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
    Select the objects to filter:IdentifyPrimaryObjects
    Name the output objects:FilteredIdentifyPrimary
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:3
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:250
    Filter using a maximum measurement value?:Yes
    Maximum value:4000
    Select the measurement to filter by:Intensity_MeanIntensity_Tph2Neurons
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_MedianRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:2.5
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:43|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
    Select initial object set:FinalCellPose
    Select object set to combine:FilteredIdentifyPrimary
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CombinedCells

MeasureObjectIntensity:[module_num:44|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
    Select images to measure:Tph2Neurons
    Select objects to measure:CombinedCells

MeasureObjectSizeShape:[module_num:45|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
    Select object sets to measure:CombinedCells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:46|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
    Select the objects to filter:CombinedCells
    Name the output objects:Cells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:2
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:200
    Filter using a maximum measurement value?:Yes
    Maximum value:4000
    Select the measurement to filter by:AreaShape_MeanRadius
    Filter using a minimum measurement value?:Yes
    Minimum value:2.5
    Filter using a maximum measurement value?:No
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
MeasureObjectSizeShape:[module_num:47|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enabled:False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
    Select object sets to measure:Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:48|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
    Parent objects:Cells
    Child objects:Nuclei_pose
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:49|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
    Select the objects to filter:Cells
    Name the output objects:Cells_with_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Children_Nuclei_pose_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:0.5
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:50|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
    Select the objects to filter:Nuclei_pose
    Name the output objects:Nuclei_in_cell
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cells
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    Measurement count:1
    Additional object count:0
    Assign overlapping child to:Parent with most overlap
    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Parent_Cells
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
MaskObjects:[module_num:51|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
    Select objects to be masked:Nuclei_pose
    Name the masked objects:MaskedNuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cells
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:No

RelateObjects:[module_num:52|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
    Parent objects:Cells_with_nuclei
    Child objects:MaskedNuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:53|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
    Select the objects to filter:MaskedNuclei
    Name the output objects:Nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Maximal per object
    Select the objects that contain the filtered objects:Cells_with_nuclei
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    Measurement count:1
    Additional object count:1
    Assign overlapping child to:Parent with most overlap
    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Parent_Cells_with_nuclei
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    Select additional object to relabel:Cells_with_nuclei
    Name the relabeled objects:Cells_with_nuclei_relabeled

MeasureObjectIntensity:[module_num:54|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
    Select images to measure:DNA, Tph2
    Select objects to measure:Cells, Cells_with_nuclei, Nuclei

MeasureObjectSizeShape:[module_num:55|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
    Select object sets to measure:Cells, Cells_with_nuclei, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:56|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enabled:False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
    Select images to measure:DNA, Tph2
    Select objects to measure:Cells, Cells_with_nuclei_from_Filter1, Nuclei

RelateObjects:[module_num:57|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
    Parent objects:Cells_with_nuclei
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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    Parent name:None

RescaleIntensity:[module_num:58|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
    Select the input image:Tph2_BGsubtract
    Name the output image:Tph2_scaled
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayOutlines:[module_num:59|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_scaled
    Name the output image:_outlines_final
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Cells
    Select outline color:yellow
    Select objects to display:Nuclei

OverlayOutlines:[module_num:60|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_scaled
    Name the output image:_outlines_cellswithNuclei
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cells
    Select outline color:#FF0080
    Select objects to display:Cells_with_nuclei
    Select outline color:yellow
    Select objects to display:Nuclei

OverlayOutlines:[module_num:61|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_scaled
    Name the output image:_outlines_IDprimary
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:IdentifyPrimaryObjects
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:#FF0080
    Select objects to display:FilteredIdentifyPrimary

OverlayOutlines:[module_num:62|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tph2_scaled
    Name the output image:_outlines_CellPose
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:FilteredTph2Cells_CP1
    Select outline color:yellow
    Select objects to display:Nuclei
    Select outline color:cyan
    Select objects to display:FilteredTph2Cells_CP2

ConvertObjectsToImage:[module_num:63|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
    Select the input objects:Cells_with_nuclei
    Name the output image:Cells_with_nuclei_labelmap
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:64|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
    Select the input objects:Nuclei
    Name the output image:Nuclei_labelmap
    Select the color format:uint16
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
SaveImages:[module_num:65|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
    Select the type of image to save:Image
    Select the image to save:Cells_with_nuclei_labelmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_labelmap_cells_with_nuclei
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_7\\labelmap_cells_with_nuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:66|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_labelmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_labelmap_nuclei
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_7\\labelmap_nuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:67|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
    Select the type of image to save:Image
    Select the image to save:_outlines_cellswithNuclei
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_cellswithNuclei
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_7\\CellsWithNuclei
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:68|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
    Select the type of image to save:Image
    Select the image to save:_outlines_CellPose
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_cellpose
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_7\\CellPose
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:69|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
    Select the type of image to save:Image
    Select the image to save:_outlines_IDprimary
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline_IDPrimary
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_7\\IDprimary
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:70|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
    Select the type of image to save:Image
    Select the image to save:_outlines_final
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:tiff
    Output file location:Default Input Folder sub-folder|Desktop\\test_7\\FinalCells
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:71|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Tph2_
    Overwrite existing files without warning?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells_with_nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
