CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:36
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C2")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C1")
    Name to assign these images:Tph2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RescaleIntensity:[module_num:5|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
    Select the input image:DNA
    Name the output image:rescaleDNA
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:6|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
    Select the input image:Tph2
    Name the output image:rescaleTph2
    Rescaling method:Stretch each image to use the full intensity range
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
GaussianFilter:[module_num:7|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
    Select the input image:Tph2
    Name the output image:GaussianFilterTph2
    Sigma:100

ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Tph2_BGsubtract
    Image or measurement?:Image
    Select the first image:rescaleTph2
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:GaussianFilterTph2
    Multiply the second image by:1.0
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
ImageMath:[module_num:9|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
    Operation:Log transform (base 2)
    Raise the power of the result by:1
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Tph2
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Resize:[module_num:10|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enabled:False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
    Select the input image:rescaleDNA
    Name the output image:ResizeDNA
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:11|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enabled:False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
    Select the input image:ResizeDNA
    Name the output image:FilteredDNA
    Window:2

RescaleIntensity:[module_num:12|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enabled:False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
    Select the input image:ResizeDNA
    Name the output image:BrightDNA
    Rescaling method:Choose specific values to be reset to the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.05,.3
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
Resize:[module_num:13|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enabled:False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
    Select the input image:sInsulin
    Name the output image:srInsulin
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:0.25
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

MedianFilter:[module_num:14|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enabled:False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
    Select the input image:srInsulin
    Name the output image:srfInsulin
    Window:2

RunCellpose:[module_num:15|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enabled:False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
    Select the input image:rescaleDNA
    Expected object diameter:12
    Detection mode:Nuclei
    Name the output object:Nuclei_pose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0

RunCellpose:[module_num:16|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notes:['for 10X image']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
    Select the input image:rescaleTph2
    Expected object diameter:20
    Detection mode:Cells
    Name the output object:CellPoseTph2
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:rescaleDNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0

RunCellpose:[module_num:17|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notes:['for 20X image']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enabled:False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
    Select the input image:rescaleTph2
    Expected object diameter:50
    Detection mode:Cells
    Name the output object:CellPoseTph2
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:rescaleDNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0

RunCellpose:[module_num:18|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enabled:False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
    Select the input image:Tph2_BGsubtract
    Expected object diameter:20
    Detection mode:Cells
    Name the output object:RunCellpose
    Use GPU:Yes
    Use averaging:Yes
    Supply nuclei image as well?:No
    Select the nuclei image:rescaleDNA
    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|
    Pre-trained model file name:cyto_0

DilateObjects:[module_num:19|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enabled:False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
    Select the input object:Nuclei_pose
    Name the output object:DilatedNuclei
    Structuring element:ball,2

ResizeObjects:[module_num:20|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enabled:False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
    Select the input object:Nuclei_pose
    Name the output object:SizedUpNuclei
    Method:Factor
    Factor:4
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
DilateObjects:[module_num:21|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enabled:False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
    Select the input object:SizedUpNuclei
    Name the output object:DilatedfromSizedUp
    Structuring element:disk,10

MeasureObjectIntensity:[module_num:22|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
    Select images to measure:Tph2
    Select objects to measure:CellPoseTph2

MeasureObjectSizeShape:[module_num:23|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
    Select object sets to measure:CellPoseTph2
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:24|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
    Select the objects to filter:CellPoseTph2
    Name the output objects:FilteredCells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a seperate set?:No
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    Select the measurement to filter by:Intensity_IntegratedIntensity_Tph2
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
OverlayOutlines:[module_num:25|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:rescaleTph2
    Name the output image:_outlines_cellpose
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0080
    Select objects to display:CellPoseTph2
    Select outline color:Green
    Select objects to display:FilteredCells

OverlayOutlines:[module_num:26|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:ImageAfterMath
    Name the output image:_outlines_cellpose_bright
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#FF0080
    Select objects to display:CellPoseTph2
    Select outline color:Green
    Select objects to display:FilteredCells

OverlayObjects:[module_num:27|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
    Input:Tph2_BGsubtract
    Name the output image:OverlayCellsSmall
    Objects:CellPoseTph2
    Opacity:0.2

ConvertObjectsToImage:[module_num:28|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
    Select the input objects:CellPoseTph2
    Name the output image:Cells_labelmap
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:29|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enabled:False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
    Select the input objects:DilatedfromSizedUp
    Name the output image:map_dilatedNuclei
    Select the color format:uint16
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
ExportToSpreadsheet:[module_num:30|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellPose_segmentation
    Overwrite existing files without warning?:Yes
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:_outlines_cellpose
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outline
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\test_cellpose_50
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:32|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
    Select the type of image to save:Image
    Select the image to save:_outlines_cellpose_bright
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlinebright
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\test_cellpose_50
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:33|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
    Select the type of image to save:Image
    Select the image to save:OverlayCellsSmall
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlayCells
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\test_cellpose_50
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:34|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
    Select the type of image to save:Image
    Select the image to save:Cells_labelmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_labelmap
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\test_cellpose_50
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:35|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:OverlayNucleiSmall
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cellposeNucleiOverlay
    Saved file format:tiff
    Output file location:Default Output Folder|Documents\\test_cellpose_50
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:36|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CellPose_
    Overwrite existing files without warning?:Yes
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